MATLABInstrumentDriver
FileVersion: 1.0
DriverName: D:\A\matlab\matlab\toolbox\instrument\instrument\drivers\agilent_e3648a.mdd
DriverType: MATLAB interface object
InstrumentType: DC Power Supply
InstrumentManufacturer: Agilent
InstrumentModel: E3649A
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
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
ConnectInitCode
  Type: InstrumentCommand

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property TrackEnabled
    Type: InstrumentCommand
    ConfigureCommand: OUTPut:TRACK:STATe
    QueryCommand: OUTPut:TRACK:STATe?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: off
    ReadOnly: never
    Description: Enables or disables the power supply track mode.

      The device provides tracking outputs. In the track mode, two voltages of the output1 and the output2 supplies track each other within the voltage programming accuracy. The track mode is always off state when the power supply is turned off or after a remote interface reset.

  Method measure
    Type: InstrumentCommand
    Line Command="Measure:Scalar:<type>:DC?" Format="text" Output="true" ReadOutputAs="ASCII"
    Input: type
    Description: MEASURE Measure the voltage or current of output signal.

      OUT = INVOKE(OBJ, 'measure', 'TYPE') measures the voltage or current of the output signal of the instrument connected to device object, OBJ and returns value to OUT. If TYPE is 'voltage', the voltage is measured. If TYPE is 'current', the current is measured.

  Method trigger
    Type: InstrumentCommand
    Line Command="INIT:IMM" Output="false"
    Line Command="*TRG" Output="false"
    Description: TRIGGER Send a software trigger.

      INVOKE(OBJ, 'trigger') sends a software trigger to the instrument connected to device object.

Group calibration
  Description: The calibration group defines properties and functions related to instrument calibration.
  Size: 1
  Mappings ChannelMap Command="Calibration1" Index="1"

  Property Count
    Type: InstrumentCommand
    QueryCommand: CAL:COUN?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns number of times the instrument has been calibrated.

  Property Enabled
    Type: InstrumentCommand
    QueryCommand: CAL:SEC:STAT?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: always
    Description: Query the secured state for calibration of the instrument.

  Property Message
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get interface
      interface = get(get(obj,'parent'),'interface');

      % Ask for the string
      fprintf(interface,'CALibration:STRing?')

      % Pluck the string
      propertyValue = fscanf(interface);

      % Trim the trailing character (a non-printing char such as \n)
      %	and send it packing
      propertyValue(length(propertyValue)) = '';
    SetMCode:
      function set(obj,propertyName, propertyValue)

      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
      %Error checking.
      if ~ischar(propertyValue)
      	error('MESSAGE must be a string.');
      end

      %Warning
      if length(propertyValue) > 40
      	warning('ICDevice:longmessage',...
      		'Your message may only be 40 characters, and will be truncated');
      end

      %Get interface
      interface = get(get(obj,'parent'),'interface');

      %Write command to instrument
      fprintf(interface,['CAL:STR "' propertyValue '"']);
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies calibration information for the instrument.

  Method calibratecurrent
    MCode:
      function calibratecurrent(obj,minData,midData,maxData)
      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
      %get the device
      device = get(obj,'Parent');

      %get the interface
      interface = get(device,'Interface');

      %set the min data
      fprintf(interface,'CAL:CURR:LEV MIN');
      fprintf(interface,'CAL:CURR:DATA ',num2str(minData)');

      %set the mid data
      fprintf(interface,'CAL:CURR:LEV MID');
      fprintf(interface,'CAL:CURR:DATA ',num2str(midData)');

      %set the max data
      fprintf(interface,'CAL:CURR:LEV Max');
      fprintf(interface,'CAL:CURR:DATA ',num2str(maxData)');

  Method calibratevoltage
    MCode:
      function calibratecurrent(obj,minData,midData,maxData)
      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
      %get the device
      device = get(obj,'Parent');

      %get the interface
      interface = get(device,'Interface');

      %set the min data
      fprintf(interface,'CAL:VOLT:LEV MIN');
      fprintf(interface,'CAL:VOLT:DATA ',num2str(minData)');

      %set the mid data
      fprintf(interface,'CAL:VOLT:LEV MID');
      fprintf(interface,'CAL:VOLT:DATA ',num2str(midData)');

      %set the max data
      fprintf(interface,'CAL:VOLT:LEV MAX');
      fprintf(interface,'CAL:VOLT:DATA ',num2str(maxData)');

  Method calibratevoltageprotection
    Type: InstrumentCommand
    Line Command="CAL:VOLT:PROT" Output="false"
    Description: CALIBRATEVOLTAGEPROTECTION Calibrate the overvoltage protection circuit of the power supply.

  Method securedevice
    MCode:
      function securedevice(obj, calibrationCode, state)
      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% code is the code to secure the instrument

      %Get parent of object
      parent = get(obj,'parent');

      % Get interface.
      interface = get(parent,'interface');

      % Parse inputs.
      switch (nargin)
      case 1
          error('CALIBRATIONCODE must be specified.');
      case 2
          fprintf(interface,'CALibration:SECure:STATe?');
          currentState = fscanf(interface, '%g');
      case 3
          % STATE can either be 'secure' or 'unsecure'.
          if ~any(strcmpi(state, {'secure', 'unsecure'}))
              error('STATE must be either ''secure'' or ''unsecure''.');
          end

          % Translating State into the expected current state numeric value.
          if strcmpi(state, 'secure')
              currentState = 0;
          else
              currentState = 1;
          end
      otherwise
          error('Too many input arguments.');
      end

      % Error checking.
      if ~ischar(calibrationCode)
          error('CALIBRATIONCODE must be a string.');
      end

      % Unsecure or secure the instrument.
      switch (currentState)
      case 0
          % Secure.
          fprintf(interface,['CALibration:SECure:STATe ON, "' calibrationCode '"']);
      case 1
          % Unsecure.
          fprintf(interface,['CALibration:SECure:STATe OFF, "' calibrationCode '"']);
      end
    Description: SECUREDEVICE secure or unsecure the power supply for calibration

      INVOKE(OBJ, 'securedevice','code', STATE) to secure or unsecure the device. Use a STATE of ‘unsecure’ to unsecure the device before initiating the calibration process. Use a STATE of 'secure' to secure the device after the calibration process is complete.

  Method updatecode
    MCode:
      function updatecode(obj,secureCode)
      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% SecureCode is the new code.

      %Get the parent
      parent = get(obj,'parent');

      % Get the interface.
      interface = get(parent,'interface');

      % Validating the code (12-character format).
      if ~(isvarname(secureCode) && length(secureCode) <= 12)
          error(['SECURECODE must be a character string with letters, ',...
                 'digits and ' sprintf('\n') 'underscores. The first character ',...
                 'in SECURECODE must be a letter.' sprintf('\n') 'The maximum length is 12 characters.']);
      end

      % Verifying that the device is unsecured before changing the code.
      fprintf(interface,'CALibration:SECure:STATe?')
      state = fscanf(interface,'%g');

      if (state == 1)
          error(['The device must be unsecured before changing the code.' sprintf('\n'),...
              'Type ''instrhelp(obj, ''securedevice'')'' for more information on how ' sprintf('\n'),...
              'to unsecure the device.']);
          return
      end

      % Set the secure code to the new code.
      fprintf(interface,['CALibration:SECure:CODE "' secureCode '"'])
    Description: UPDATECODE Change the security code.

      INVOKE(OBJ, 'updatecode' NEWCODE) updates the calibration security code.  The instrument must first be unsecured using the current security code.

      See also SECUREDEVICE

Group display
  Description: Define the behavior of the instrument front panel display.
  Size: 1
  Mappings ChannelMap Command="Display1" Index="1"

  Property Enabled
    Type: InstrumentCommand
    ConfigureCommand: DISP
    QueryCommand: DISP?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Set the state of the front panel display.

  Property Mode
    Type: InstrumentCommand
    ConfigureCommand: DISP:MODE
    QueryCommand: DISP:MODE?
    PermissibleType: String enum [voltage-voltage=VV, voltage-current=VI, current-current=II]
    DefaultValue: voltage-voltage
    ReadOnly: never
    Description: Set the front panel display mode. Valid values are:

      voltage-voltage         display the voltages of the two outputs
      voltage-current         display the voltage and current for each output
      current-current         display the currents of the two outputs

  Method clear
    Type: InstrumentCommand
    Line Command="DISP:TEXT:CLE" Output="false"
    Description: CLEAR Clear the message displayed on the front panel.

      INVOKE(OBJ, 'clear') removes any message displayed on the instrument front panel.

      See also SETTEXT

  Method settext
    MCode:
      function setText(obj,str)
      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% str is the string to display

      %get parent
      parent = get(obj,'parent');

      %Get interface
      interface = get(parent,'interface');

      % Error checking.
      if ~ischar(str)
          error('STR must be a string.');
      end

      % Write the command to instrument.
      fprintf(interface, ['Display:Text "' str '"']);
    Description: SETTEXT Set the string displayed on the instrument front panel.

      INVOKE(OBJ, 'displaytext', S) displays string, S, on the instrument's front panel.
      The Display group's Enable property must be on for the text to be visible.

      See also CLEAR.

Group output
  Description: Define the behavior and state of the outputs.
  Command: INSTRument:NSELect  <ID>
  Size: 2
  Mappings
    ChannelMap Command="2" Index="2"
    ChannelMap Command="1" Index="1"

  Property CurrentLimit
    Type: InstrumentCommand
    ConfigureCommand: Source:Current:Level:Immediate:Amplitude
    QueryCommand: Source:Current:Level:Immediate:Amplitude?
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p35v [Max="1.442" Min="0.0"]
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p60v [Max="0.824" Min="0.0"]
    PermissibleType: String enum [min=MIN, max=MAX, up=UP, down=DOWN]
    DefaultValue: 1.4
    ReadOnly: never
    Description: Set and query the value of the output current limit.

  Property CurrentStep
    Type: InstrumentCommand
    ConfigureCommand: CURRent:STEP
    QueryCommand: CURRent:STEP?
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p35v [Max="1.442" Min="2.7E-5"]
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p60v [Max="0.824" Min="2.7E-5"]
    PermissibleType: String enum [default=DEF]
    DefaultValue: default
    ReadOnly: never
    Description: Set and query the step size used with the increasecurrent and decreasecurrent functions.

  Property Enabled
    Type: InstrumentCommand
    ConfigureCommand: Output:State
    QueryCommand: Output:State?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Set and query the state of the output.

  Property OverVoltageProtectionEnabled
    Type: InstrumentCommand
    ConfigureCommand: Source:Voltage:Protection:State
    QueryCommand: Source:Voltage:Protection:State?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Set and query the state of the over voltage protection feature.

  Property OverVoltageProtectionLimit
    Type: InstrumentCommand
    ConfigureCommand: Source:Voltage:Protection:Level
    QueryCommand: Source:Voltage:Protection:Level?
    PermissibleType: Double bounded [Max="66.0" Min="1.0"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 22.0
    ReadOnly: never
    Description: Set and query the over voltage protection limit.

  Property State
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      fprintf(interface,'VOLTage:PROTection:TRIPped?');
      state = fscanf(interface);

      % If the over voltage protection is tripped, return 'tripped'
      if strncmp(state ,'1',1)
          propertyValue = 'tripped';
      else
      % Otherwise return state of output
       fprintf(interface,'OUTPut:STATe?')
       state = fscanf(interface);
       if strncmp(state, '1',1)
      	 propertyValue = 'on';
       elseif strncmp(state, '0',1);
      	 propertyValue = 'off';
       else
      	 error(['Unknown value returned by device. Accepted values for'...
      		 ' State property are ''tripped'',''on'', and ''off''']);
       end

      end
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    PermissibleType: String enum [tripped=tripped, on=on, off=off]
    DefaultValue: tripped
    ReadOnly: always
    Description: Returns whether the voltage protection is tripped.

  Property TriggerCoupling
    Type: InstrumentCommand
    ConfigureCommand: inst:coup:trig
    QueryCommand: inst:coup:trig?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: Off
    ReadOnly: never
    Description: Enable or disable the coupling between two outputs.

      The COUPLE command consists of an optional subsystem node followed by signal parameter. The only valid parameter for the subsystem node is the trigger subsystem. If no node follows the couple command, trigger subsystem is assumed to be couple.

      The outputs of the power supply are considered as two logical instruments. The instrument commands provide a mechanism to identify and select an output. When one output is selected, the other one is unavailable for programming until selected.

  Property TriggerCurrentLimit
    Type: InstrumentCommand
    ConfigureCommand: Source:Current:Level:Triggered:Amplitude
    QueryCommand: Source:Current:Level:Triggered:Amplitude?
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p35v [Max="1.442" Min="0.0"]
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p60v [Max="0.824" Min="0.0"]
    PermissibleType: String enum [max=MAX, min=MIN]
    DefaultValue: 1.4
    ReadOnly: never
    Description: Set or query the trigger ouput current limit.

  Property TriggerDelay
    Type: InstrumentCommand
    ConfigureCommand: Trigger:Sequence:Delay
    QueryCommand: Trigger:Sequence:Delay?
    PermissibleType: Double bounded [Max="3600.0" Min="0.0"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0
    ReadOnly: never
    Description: Set or query the time delay between the detection of the trigger and the start of output.

  Property TriggerSource
    Type: InstrumentCommand
    ConfigureCommand: Trigger:Source
    QueryCommand: Trigger:Source?
    PermissibleType: String enum [bus=BUS, immediate=IMM]
    DefaultValue: bus
    ReadOnly: never
    Description: Set or query the trigger source.

  Property TriggerVoltageLevel
    Type: InstrumentCommand
    ConfigureCommand: Source:Voltage:Level:Triggered:Amplitude
    QueryCommand: Source:Voltage:Level:Triggered:Amplitude?
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p35v [Max="36.05" Min="0.0"]
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p60v [Max="61.8" Min="0.0"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0
    ReadOnly: never
    Description: Set or query the trigger output voltage level.

  Property VoltageLevel
    Type: InstrumentCommand
    ConfigureCommand: Source:Voltage:Level:Immediate:Amplitude
    QueryCommand: Source:Voltage:Level:Immediate:Amplitude?
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p35v [Max="36.05" Min="0.0"]
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p60v [Max="61.8" Min="0.0"]
    PermissibleType: String enum [max=MAX, min=MIN, up=UP, down=DOWN]
    DefaultValue: 0
    ReadOnly: never
    Description: Set or query the trigger ouput voltage level.

  Property VoltageOutputRange
    Type: InstrumentCommand
    ConfigureCommand: Voltage:Range
    QueryCommand: Voltage:Range?
    PermissibleType: String enum [low=LOW, high=HIGH, p35v=p35v, p60v=p60v]
    DefaultValue: low
    ReadOnly: never
    Description: Set or query the voltage output range.

  Property VoltageStep
    Type: InstrumentCommand
    ConfigureCommand: Voltage:Step
    QueryCommand: Voltage:Step?
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p35v [Max="36.05" Min="0.00114"]
    PermissibleType: Double bounded DependentProperty=VoltageOutputRange DependentPropertyValue=p60v [Max="61.8" Min="0.00114"]
    PermissibleType: String enum [default=DEF]
    DefaultValue: default
    ReadOnly: never
    Description: Set and query the step size used with the increasevoltage and decreasevoltage functions.

  Method decreasecurrent
    Type: InstrumentCommand
    Line Command="CURR DOWN" Output="false"
    Description: DECREASECURRENT Decrease the output current leve.

      INVOKE(OBJ, 'decreasecurrent') decreases the current by the amount specified in the CurrentStep property.

  Method decreasevoltage
    Type: InstrumentCommand
    Line Command="VOLT DOWN" Output="false"
    Description: DECREASEVOLTAGE Decrease the output voltage level.

      INVOKE(OBJ, 'decreasevoltage') decreases the output voltage by the amount specified in the VoltageStep property.

  Method disable
    Type: InstrumentCommand
    Line Command="Output:State OFF" Output="false"
    Description: DISABLE Disable specified output of the power supply.

      INVOKE(OBJ, 'disable') disable device output object, OBJ. OBJ can be an array of output objects.

      See also ENABLE.

  Method enable
    Type: InstrumentCommand
    Line Command="Output:State ON" Output="false"
    Description: ENABLE Enable device output of the instrument.

      INVOKE(OBJ, 'enable') enable device output object, OBJ. OBJ can be an array of output objects.

      See also DISABLE.

  Method increasecurrent
    Type: InstrumentCommand
    Line Command="CURR UP" Output="false"
    Description: INCREASECURRENT Increase the output current level.

      INVOKE(OBJ, 'increasecurrent') increases the current level by the amount specified in the CurrentLevel property.

  Method increasevoltage
    Type: InstrumentCommand
    Line Command="VOLT UP" Output="false"
    Description: INCREASEVOLTAGE Increase the voltage level.

      INVOKE(OBJ, 'increasevoltage') increases the voltage by the amount specified in the VoltageStep property.

  Method resetvoltageprotection
    Type: InstrumentCommand
    Line Command="Voltage:Protection:Clear" Output="false"
    Description: RESETVOLTAGEPROTECTION Clears the overvoltage protection state.

      INVOKE(OBJ, 'resetvoltageprotection') resets the overvoltage protection state.

Group system
  Description: General instrument system functionality.
  Size: 1
  Mappings ChannelMap Command="Util1" Index="1"

  Property Version
    Type: InstrumentCommand
    QueryCommand: SYST:VERS?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns the SCPI version of the instrument.

  Method beep
    Type: InstrumentCommand
    Line Command="SYST:BEEP" Output="false"
    Description: BEEP Issue a beep.

      INVOKE(OBJ, 'beep') issues a beep from the instrument.

  Method disablelocalcontrols
    MCode:
      function disablelocalcontrols(obj)
      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
      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Get the System interface
      fprintf(interface,'SYSTem:INTerface?');
      systemInterface =fscanf(interface);

      % If the interface is not RS232, generate an error
      if (strcmpi(systemInterface,'RS232')~= 1)
          error('Must be in RS232 interface to use this function');
          return
      end

      % Otherewise send appropriate command
      fprintf(interface,'SYSTem:RWLock');
    Description: DISABLELOCALCONTROLS Disable all front-panel buttons and knobs.

      INVOKE(OBJ, 'disablelocalcontrols') 'unlocks' all front-panel keys and knobs. Valid for RS-232 mode only.

  Method enablelocalcontrols
    MCode:
      function enablelocalcontrols(obj)
      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
      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Get the (remote) system interface
      fprintf(interface,'SYSTem:INTerface?');
      systemInterface = fscanf(interface);

      % If the interface is not RS232, generate an error
      if (strcmpi(systemInterface,'RS232')~= 1)
          error('Must be in RS232 interface to use this function');
      return
      end

      % Otherewise send appropriate command
      fprintf(interface,'SYSTem:LOCal');
    Description: ENABLELOCALCONTROLS Enable all front-panel buttons and knobs.

      INVOKE(OBJ, 'enablelocalcontrols') 'locks' all front-panel keys and knobs. Valid for RS-232 mode only.

  Method loadstate
    MCode:
      function loadstate(obj,location)
      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% LOCATION is the specified storage location

      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Error checking
          % LOCATION must be a scalar and between 1 and 5, inclusive.
          if ~isnumeric(location)
              error('LOCATION must be numeric');
          elseif  location >5 || location <1
                  error('LOCATION must be between 1 and 5 inclusive');
          end

      % Send memory name query command
      fprintf(interface,['*RCL ' num2str(location)])
    Description: LOADSTATE Recall a previously saved configuration.

      INVOKE(OBJ, 'loadstate', LOCATION) recalls the power supply state stored in the specified storage LOCATION.

  Method savestate
    MCode:
      function savestate(obj,location)
      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% LOCATION is the specified storage location

      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Error checking
          % LOCATION must be a scalar and between 1 and 5, inclusive.
          if ~isnumeric(location)
              error('LOCATION must be numeric');
          elseif  location >5 || location <1
                  error('LOCATION must be between 1 and 5 inclusive');
          end

      % Send memory name query command
      fprintf(interface,['*SAV ' num2str(location)])
    Description: SAVESTATE Store a configuration.

      INVOKE(OBJ, 'savestate', LOCATION) stores the present configuration of theinstrument to the specified LOCATION. Any state previously stored in the same location is overwritten.
